PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '1000', 'session': '001', 'condition': "['01', '02', '03', '04', '05', '06', '07', '08', '09', '10', '11', '12', '13', '14', '15', '16']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = black
  expName = task-switching-replication
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Routines
  Routine Initialize
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # determine experiment settings from participant condition
        conditionStr = expInfo['condition']
        condition = int(conditionStr)
        numBlocks = 4
        numTrialsPerBlock = 4
        numTrialsUntimed = 4
        numTrialsTimed = 4

        counterBalancing = {
            #    posture     cueSolid cueDashed colorLeft colorRight shapeLeft  shapeRight
             1: ['standing', 'color', 'shape', 'blue',   'yellow', 'triangle', 'square'],
             2: ['standing', 'color', 'shape', 'blue',   'yellow', 'square',   'triangle'],
             3: ['standing', 'color', 'shape', 'yellow', 'blue',   'triangle', 'square'],
             4: ['standing', 'color', 'shape', 'yellow', 'blue',   'square',   'triangle'],

             5: ['standing', 'shape', 'color', 'blue',   'yellow', 'triangle', 'square'],
             6: ['standing', 'shape', 'color', 'blue',   'yellow', 'square',   'triangle'],
             7: ['standing', 'shape', 'color', 'yellow', 'blue',   'triangle', 'square'],
             8: ['standing', 'shape', 'color', 'yellow', 'blue',   'square',   'triangle'],

             9: ['sitting',  'color', 'shape', 'blue',   'yellow', 'triangle', 'square'],
            10: ['sitting',  'color', 'shape', 'blue',   'yellow', 'square',   'triangle'],
            11: ['sitting',  'color', 'shape', 'yellow', 'blue',   'triangle', 'square'],
            12: ['sitting',  'color', 'shape', 'yellow', 'blue',   'square',   'triangle'],

            13: ['sitting',  'shape', 'color', 'blue',   'yellow', 'triangle', 'square'],
            14: ['sitting',  'shape', 'color', 'blue',   'yellow', 'square',   'triangle'],
            15: ['sitting',  'shape', 'color', 'yellow', 'blue',   'triangle', 'square'],
            16: ['sitting',  'shape', 'color', 'yellow', 'blue',   'square',   'triangle'],
        }

        posture, cueSolid, cueDashed, colorLeft, colorRight, shapeLeft, shapeRight = counterBalancing[condition]

        # set up instrcution and experiment image stimuli based on condition
        untimedInstruction01   = 'instructions/cond-%02d-untimed-01.png' % (condition)
        untimedInstruction02   = 'instructions/cond-%02d-untimed-02.png' % (condition)
        untimedInstruction03   = 'instructions/cond-%02d-untimed-03.png' % (condition)
        untimedInstruction04   = 'instructions/cond-%02d-untimed-04.png' % (condition)
        untimedInstruction05   = 'instructions/cond-%02d-untimed-05.png' % (condition)
        untimedInstruction06   = 'instructions/cond-%02d-untimed-06.png' % (condition)
        untimedInstruction07   = 'instructions/cond-%02d-untimed-07.png' % (condition)
        untimedInstruction08   = 'instructions/cond-%02d-untimed-08.png' % (condition)
        timedInstruction01     = 'instructions/cond-%02d-timed-01.png' % (condition)
        timedInstruction02     = 'instructions/cond-%02d-timed-02.png' % (condition)
        expInstruction01       = 'instructions/cond-%02d-experiment-01.png' % (condition)
        errorInstructionDashed = 'instructions/cond-%02d-error-dashed.png' % (condition)
        errorInstructionSolid  = 'instructions/cond-%02d-error-solid.png' % (condition)

        # methods to create counter balanced trial blocks
        cueTypes = ['dashed', 'solid']
        shapeTypes = ['square', 'triangle']
        shapeColors = ['blue', 'yellow']

        def counter_balanced_trials(numTrials):
            """
            We generate numTrials + 1, first trial is randomly
            selected, then remaining trials are selected to
            have equal numbers of congruant/incongruant and
            switch/no-switch trials.  We expect numTrials to be
            an even number divisible by 2.
            """
            trials = []

            # genenerate initial random trial
            cueType = random.choice(cueTypes)
            shapeType = random.choice(shapeTypes)
            shapeColor = random.choice(shapeColors)
            trial = (1, 'NA', 'NA', cueType, shapeType, shapeColor)

            trials.append( trial )

            # now create and randomly permute the trial types
            # we are trying to balance
            halfTrials = int(numTrials / 2)
            congruantTrialTypes = ['congruant'] * halfTrials + ['incongruant'] * halfTrials
            random.shuffle(congruantTrialTypes)
            switchTrialTypes = ['switch'] * halfTrials + ['noswitch'] * halfTrials
            random.shuffle(switchTrialTypes)
            trialNums = range(2, numTrials + 2)

            for trialNum, congruantTrialType, switchTrialType in zip(trialNums, congruantTrialTypes, switchTrialTypes):
                _, _, _, prevCueType, prevShapeType, prevShapeColor = trials[-1]

                # determine whether this is a switch or no switch on the task (choose by shape vs.
                # choose by color)
                if switchTrialType == 'noswitch':
                    cueType = prevCueType
                else:
                    if prevCueType == 'dashed':
                        cueType = 'solid'
                    else:
                        cueType = 'dashed'

                # determine if response is congruant (push same button) or incongruant
                # (push the other button)
                # TODO: we currently hard code that cue solid is choose by shape and
                #   cue dashed is choose by color, but this needs to differ depending
                #   on the participant condition of what the cue means
                if congruantTrialType == 'congruant':
                    if prevCueType == 'solid': # hard code solid to shape select task
                        shapeType = prevShapeType
                        shapeColor = random.choice(shapeColors)
                    else: # hard code dashed to be color select task
                        shapeColor = prevShapeColor
                        shapeType = random.choice(shapeTypes)
                else:
                    if prevCueType == 'solid': # hard code solid to shape select task
                        if prevShapeType == 'square':
                            shapeType = 'triangle'
                        else:
                            shapeType = 'square'
                        shapeColor = random.choice(shapeColors)
                    else: # hard code dashed to be color select task
                        if prevShapeColor == 'blue':
                            shapeColor = 'yellow'
                        else:
                            shapeColor = 'blue'
                        shapeType = random.choice(shapeTypes)

                # save the generated trial to be returned
                trial = (trialNum, switchTrialType, congruantTrialType, cueType, shapeType, shapeColor)
                trials.append( trial )

            return trials

        def trialsToTrialList(trials):
            """
            Return a list of dictionaries, where keys are the trial feature/variable names
            """
            trialList = []

            # loop to generate trial settings/variables
            for trialNum, switchTrialType, congruantTrialType, cueType, shapeType, shapeColor in trials:
                # file names for cue/stimuli to use for this trial
                cueFileName = 'stimuli/%s-rectangle.png' % (cueType)
                stimuliFileName = 'stimuli/%s-%s.png' % (shapeColor, shapeType)

                # correct answer for this trial.
                # TODO: we are hard codeing condition 07 at the moment as correct answer here
                correctAnswer = 1
                if cueType == 'dashed': # select by color
                    if shapeColor == 'yellow':
                        correctAnswer = 1
                    else:
                        correctAnswer = 2
                else: # select by shape
                    if shapeType == 'triangle':
                        correctAnswer = 1
                    else:
                        correctAnswer = 2

                trialDict = {
                    'trialNum': trialNum,
                    'switchTrialType': switchTrialType,
                    'congruantTrialType': congruantTrialType,
                    'cueType': cueType,
                    'shapeType': shapeType,
                    'shapeColor': shapeColor,
                    'cueFileName': cueFileName,
                    'stimuliFileName': stimuliFileName,
                    'correctAnswer': correctAnswer,
                }

                trialList.append(trialDict)

            return trialList

        def trialsToCsv(trialFileName, trials):
            f = open(trialFileName, 'w')

            # file header
            f.write("trialNum,switchTrialType,congruantTrialType,cueType,shapeType,shapeColor,cueFileName,stimuliFileName,correctAnswer\n")

            # loop to generate trial settings/variables
            for trialNum, switchTrialType, congruantTrialType, cueType, shapeType, shapeColor in trials:
                # file names for cue/stimuli to use for this trial
                cueFileName = 'stimuli/%s-rectangle.png' % (cueType)
                stimuliFileName = 'stimuli/%s-%s.png' % (shapeColor, shapeType)

                # correct answer for this trial.
                # TODO: we are hard codeing condition 07 at the moment as correct answer here
                correctAnswer = 1
                if cueType == 'dashed': # select by color
                    if shapeColor == 'yellow':
                        correctAnswer = 1
                    else:
                        correctAnswer = 2
                else: # select by shape
                    if shapeType == 'triangle':
                        correctAnswer = 1
                    else:
                        correctAnswer = 2

                # output this trial
                f.write('%d,%s,%s,%s,%s,%s,%s,%s,%d\n' %
                      (trialNum, switchTrialType, congruantTrialType, cueType, shapeType, shapeColor, cueFileName, stimuliFileName, correctAnswer))

            f.close()
  Routine ExpInstruction01
    ImageComponent image
      image = $expInstruction01
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_response
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ExpInstructionBlock
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        blockNumber = 1
        blockText = ""
      Begin Routine:
        blockText = """
        Please check your posture and ensure you
        are still in the correct position.

        You should be in the '%s' posture for this
        block of the experiment.

        This is block %d of %d blocks



        Press any button to start the challenge""" % (posture, blockNumber, numBlocks)

        blockNumber += 1
    TextComponent text
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockText
      wrapWidth = 30
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ExpTrial
    ImageComponent cue_image
      image [set every repeat] = $cueFileName
      size = (25.0, 25.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = deg
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    ImageComponent stimuli_image
      image [set every repeat] = $stimuliFileName
      size = (12.0, 12.0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = deg
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    KeyboardComponent exp_resp
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine InitializeBlock
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        blockNum = 1
        thisBlockTrials = counter_balanced_trials(numTrialsPerBlock)
        #thisBlockTrialList = trialsToTrialList(thisBlockTrials)
        thisBlockFileName = 'data/block-%02d-trials.csv' % blockNum
        trialsToCsv(thisBlockFileName, thisBlockTrials)
  Routine SolidFeedback
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image = $errorInstructionSolid
      size = (53, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine DashedFeedback
    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_3
      image = $errorInstructionDashed
      size = (53, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine DetermineExpFeedback
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        selectCorrect = 0
        selectIncorrectSolid = 0
        selectIncorrectDashed= 0
      Begin Routine:
        if exp_resp.corr == 1:
            selectCorrect = 1
            selectIncorrectSolid = 0
            selectIncorrectDashed = 0
        else:
            selectCorrect = 0
            if cueType == 'solid':
                selectIncorrectSolid = 1
                selectIncorrectDashed = 0
            else:
                selectIncorrectSolid = 0
                selectIncorrectDashed = 1
  Routine Delay
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine PostureInstruction
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        postureTrial = 1
      Begin Routine:
        # move to next posture if needed,
        # this will switch the posture after each
        # set of numBlocks is completed.
        if postureTrial >= 2:
            blockNumber = 1
            if posture == 'standing':
                posture = 'sitting'
            elif posture == 'sitting':
                posture = 'standing'

        # set up instructions for this posture
        postureInstructions = """
        You will be performing this experiment in
        two separate postures.

        At this time you should be in the
        `%s` posture

        Please have the experimenter help you
        get yourself into position for this
        portion of the experiment.

        Press any button when you are ready to continue.
        """ % (posture)

        # set up for next posture iteration
        postureTrial += 1
    TextComponent text_3
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      text [set every repeat] = $postureInstructions
      wrapWidth = 30
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Results
    TextComponent text_4
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Thank you for participating in our experiment.
        Your participantion is greatly appreciated.

        You had an accuracy rate of

        352 / 392 = 89.8% correct

        Your average reaction time on the trials
        that you responded in time was

        0.83 ms

        Press any key when you are ready to finish the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction01
    ImageComponent image_4
      image = $untimedInstruction01
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction02
    ImageComponent image_5
      image = $untimedInstruction02
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = '1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction03
    ImageComponent image_6
      image = $untimedInstruction03
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction04
    ImageComponent image_7
      image = $untimedInstruction04
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction05
    ImageComponent image_8
      image = $untimedInstruction05
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction06
    ImageComponent image_9
      image = $untimedInstruction06
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction07
    ImageComponent image_10
      image = $untimedInstruction07
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction08
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  Routine InitializeUntimed
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        untimedNum = 1
        thisUntimedTrials = counter_balanced_trials(numTrialsUntimed)
        #thisBlockTrialList = trialsToTrialList(thisBlockTrials)
        thisUntimedFileName = 'data/untimed-%02d-trials.csv' % untimedNum
        trialsToCsv(thisUntimedFileName, thisUntimedTrials)
  Routine UntimedTrial
    ImageComponent cue_untimed_image
      image [set every repeat] = $cueFileName
      size = (25.0, 25.0)
      startVal [time (s)] = 0.0
      units = deg
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    ImageComponent stimuli_untimed_image
      image [set every repeat] = $stimuliFileName
      size = (12.0, 12.0)
      startVal [time (s)] = 1.0
      units = deg
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    KeyboardComponent untimed_resp
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine DetermineUntimedFeedback
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        selectCorrect = 0
        selectIncorrectSolid = 0
        selectIncorrectDashed= 0
      Begin Routine:
        if untimed_resp.corr == 1:
            selectCorrect = 1
            selectIncorrectSolid = 0
            selectIncorrectDashed = 0
        else:
            selectCorrect = 0
            if cueType == 'solid':
                selectIncorrectSolid = 1
                selectIncorrectDashed = 0
            else:
                selectIncorrectSolid = 0
                selectIncorrectDashed = 1
  Routine TimedInstruction01
    ImageComponent image_12
      image = $timedInstruction01
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TimedInstruction02
    ImageComponent image_13
      image = $timedInstruction02
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InitializeTimed
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        timedNum = 1
        thisTimedTrials = counter_balanced_trials(numTrialsTimed)
        #thisBlockTrialList = trialsToTrialList(thisBlockTrials)
        thisTimedFileName = 'data/timed-%02d-trials.csv' % timedNum
        trialsToCsv(thisTimedFileName, thisTimedTrials)
  Routine TimedTrial
    ImageComponent cue_timed_image
      image [set every repeat] = $cueFileName
      size = (25.0, 25.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = deg
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    ImageComponent stimuli_timed_image
      image [set every repeat] = $stimuliFileName
      size = (12.0, 12.0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = deg
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    KeyboardComponent timed_resp
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine DetermineTimedFeedback
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        selectCorrect = 0
        selectIncorrectSolid = 0
        selectIncorrectDashed= 0
      Begin Routine:
        if timed_resp.corr == 1:
            selectCorrect = 1
            selectIncorrectSolid = 0
            selectIncorrectDashed = 0
        else:
            selectCorrect = 0
            if cueType == 'solid':
                selectIncorrectSolid = 1
                selectIncorrectDashed = 0
            else:
                selectIncorrectSolid = 0
                selectIncorrectDashed = 1
Flow
  Routine Initialize
  Routine PostureInstruction
  Routine UntimedInstruction01
  Routine UntimedInstruction02
  Routine UntimedInstruction03
  Routine UntimedInstruction04
  Routine UntimedInstruction05
  Routine UntimedInstruction06
  Routine UntimedInstruction07
  Routine UntimedInstruction08
  Routine InitializeUntimed
  LoopInitiator untimedTrials loopType="TrialHandler"
    conditionsFile = $thisUntimedFileName
    loopType = sequential
    nReps = 1
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    Routine UntimedTrial
    Routine DetermineUntimedFeedback
    LoopInitiator selectSolid1 loopType="TrialHandler"
      loopType = sequential
      nReps = selectIncorrectSolid
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      Routine SolidFeedback
    LoopTerminator selectSolid1
    LoopInitiator selectDashed1 loopType="TrialHandler"
      loopType = sequential
      nReps = selectIncorrectDashed
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      Routine DashedFeedback
    LoopTerminator selectDashed1
    Routine Delay
  LoopTerminator untimedTrials
  Routine TimedInstruction01
  Routine TimedInstruction02
  Routine InitializeTimed
  LoopInitiator timedTrials loopType="TrialHandler"
    conditionsFile = $thisTimedFileName
    loopType = sequential
    nReps = 1
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    Routine TimedTrial
    Routine DetermineTimedFeedback
    LoopInitiator selectSolid2 loopType="TrialHandler"
      loopType = sequential
      nReps = selectIncorrectSolid
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      Routine SolidFeedback
    LoopTerminator selectSolid2
    LoopInitiator selectDashed2 loopType="TrialHandler"
      loopType = sequential
      nReps = selectIncorrectDashed
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      Routine DashedFeedback
    LoopTerminator selectDashed2
    Routine Delay
  LoopTerminator timedTrials
  LoopInitiator postures loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine PostureInstruction
    LoopInitiator blocks loopType="TrialHandler"
      loopType = sequential
      nReps = numBlocks
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      Routine ExpInstruction01
      Routine ExpInstructionBlock
      Routine InitializeBlock
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $thisBlockFileName
        loopType = sequential
        nReps = 1
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        Routine ExpTrial
        Routine DetermineExpFeedback
        LoopInitiator selectSolid loopType="TrialHandler"
          loopType = sequential
          nReps = selectIncorrectSolid
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          Routine SolidFeedback
        LoopTerminator selectSolid
        LoopInitiator selectDashed loopType="TrialHandler"
          loopType = sequential
          nReps = selectIncorrectDashed
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          Routine DashedFeedback
        LoopTerminator selectDashed
        Routine Delay
      LoopTerminator trials
    LoopTerminator blocks
  LoopTerminator postures
  Routine Results
